PsychoPy2experiment version="2024.2.4"
Settings
  Audio latency priority = 0
  Audio lib = ptb
  Completed URL = https://csbsutah.co1.qualtrics.com/jfe/form/SV_bkO77dxG6dtzM58
  Data filename = 'data/raw_%s' % (expInfo['Please keep this number!'])
  End Message = Please wait for one moment while we load the final forms.
  Experiment info = {'Please keep this number!': 'f"{randint(0, 999):03.0f}"', 'What letter were you given?': "['','o','p','q','r','s','t','u','v','w','x','y','z']"}
  Full-screen window = True
  Incomplete URL = https://csbsutah.co1.qualtrics.com/jfe/form/SV_bkO77dxG6dtzM58
  Monitor = testMonitor
  Resources = ['z.csv', 'y.csv', 'x.csv', 'w.csv', 'v.csv', 'u.csv', 't.csv', 's.csv', 'r.csv', 'q.csv', 'p.csv', 'o.csv', 'LANature/BotanicGardens_0836.JPG', 'LANature/BotanicGardens_0924.JPG', 'LANature/BotanicGardens_0941.JPG', 'LANature/BotanicGardens_0947.JPG', 'LANature/BotanicGardens_0997.JPG', 'LANature/GotG_0053.jpg', 'LANature/GotG_0060.jpg', 'LANature/GotG_0072.jpg', 'LANature/GotG_0084.jpg', 'LANature/GotG_0100.jpg', 'LANature/Hyalite_0093.JPG', 'LANature/Hyalite_0174.JPG', 'LANature/Hyalite_0180.JPG', 'LANature/Hyalite_0191.JPG', 'LANature/Hyalite_0213.JPG', 'LANature/Tarryall_0622.JPG', 'LANature/Vacation_1925.JPG', 'LANature/Vacation_5781.JPG', 'LANature/Vacation_7034.JPG', 'LANature/Vacation_7074.JPG', 'LANature/Vacation_7080.JPG', 'LANature/Vacation_7082.JPG', 'LANature/Vacation_7115.JPG', 'LANature/Vacation_7919.JPG', 'LANature/Vacation_7996.JPG', 'LANature/Zoo_0075.JPG', 'LANature/Zoo_0172.JPG', 'LANature/Zoo_0176.JPG', 'LANature/03L.jpg', 'LANature/04H.jpg', 'LANature/05H.jpg', 'LANature/06L.jpg', 'LANature/08H.jpg', 'LANature/09L.jpg', 'LANature/15H.jpg', 'LANature/15L.jpg', 'LANature/17H.jpg', 'LANature/20L.jpg', 'LANature/22H.jpg', 'LANature/23L.jpg', 'LANature/24L.jpg', 'LANature/25L.jpg', 'LANature/28L.jpg', 'LANature/29H.jpg', 'LANature/29L.jpg', 'LANature/31H.jpg', 'LANature/31L.jpg', 'LANature/34L.jpg', 'LANature/39H.jpg', 'LANature/Aquarium_0261.JPG', 'LANature/Aquarium_0325.JPG', 'LANature/Aquarium_0343.JPG', 'LANature/Aquarium_0442.JPG', 'LANature/Aquarium_0450.JPG', 'LANature/Aquarium_0465.JPG', 'LANature/Aquarium_0605.JPG', 'LANature/Aquarium_0632.JPG', 'LANature/Aquarium_0660.JPG', 'LANature/BotanicGardens_0176.JPG', 'LANature/BotanicGardens_0497.JPG', 'HAUrban/16thStreetMall_0760.JPG', 'HAUrban/Billings_0243.JPG', 'HAUrban/Billings_0250.JPG', 'HAUrban/Billings_0270.JPG', 'HAUrban/Billings_0277.JPG', 'HAUrban/Billings_0285.JPG', 'HAUrban/Billings_0295.JPG', 'HAUrban/Billings_0299.JPG', 'HAUrban/Billings_0306.JPG', 'HAUrban/Billings_0309.JPG', 'HAUrban/Billings_0310.JPG', 'HAUrban/Billings_0313.JPG', 'HAUrban/Bozeman_0049.JPG', 'HAUrban/CO_Blvrd_3.jpg', 'HAUrban/CO_Blvrd_4.jpg', 'HAUrban/CO_Blvrd_8.jpg', 'HAUrban/CO_Blvrd_9.jpg', 'HAUrban/CO_Blvrd_11.jpg', 'HAUrban/CO_Blvrd_12.jpg', 'HAUrban/CO_Blvrd_14.jpg', 'HAUrban/CO_Blvrd_21.jpg', 'HAUrban/CO_Blvrd_22.jpg', 'HAUrban/CO_Blvrd_23.jpg', 'HAUrban/CO_Blvrd_28.jpg', 'HAUrban/CO_Blvrd_38.jpg', 'HAUrban/CO_Blvrd_41.jpg', 'HAUrban/Downtown_0304.jpg', 'HAUrban/Downtown_0306.jpg', 'HAUrban/Downtown_0317.jpg', 'HAUrban/Downtown_0324.jpg', 'HAUrban/Downtown_0330.jpg', 'HAUrban/Downtown_0341.jpg', 'HAUrban/Downtown_0344.jpg', 'HAUrban/Downtown_0345.jpg', 'HAUrban/Downtown_0346.jpg', 'HAUrban/Downtown_0351.jpg', 'HAUrban/Downtown_0353.jpg', 'HAUrban/Downtown_0354.jpg', 'HAUrban/Downtown_0387.jpg', 'HAUrban/Downtown_0392.jpg', 'HAUrban/DTC_12.jpg', 'HAUrban/DTC_13.jpg', 'HAUrban/DTC_32.jpg', 'HAUrban/DTC_47.jpg', 'HAUrban/DU_19.jpg', 'HAUrban/DU_20.jpg', 'HAUrban/DU_24.jpg', 'HAUrban/DU_38.jpg', 'HAUrban/DU_43.jpg', 'HAUrban/Golden_40.jpg', 'HAUrban/Golden_47.jpg', 'HAUrban/Golden_62.jpg', 'HAUrban/Golden_64.jpg', 'HAUrban/Golden_71.jpg', 'HAUrban/Golden_77.jpg', 'HAUrban/Golden_78.jpg', 'HAUrban/Urban_Berman_15.jpg', 'HAUrban/Urban_Berman_19.jpg', 'HAUrban/Urban_Berman_24.jpg', 'HAUrban/Urban_Berman_32.jpg', 'LAUrban/16thStreetMall_0740.JPG', 'LAUrban/16thStreetMall_0744.JPG', 'LAUrban/16thStreetMall_0756.JPG', 'LAUrban/16thStreetMall_0765.JPG', 'LAUrban/16thStreetMall_0771.JPG', 'LAUrban/16thStreetMall_0782.JPG', 'LAUrban/16thStreetMall_0795.JPG', 'LAUrban/16thStreetMall_0806.JPG', 'LAUrban/16thStreetMall_0813.JPG', 'LAUrban/16thStreetMall_0838.JPG', 'LAUrban/Billings_0266.JPG', 'LAUrban/Billings_0274.JPG', 'LAUrban/Billings_0276.JPG', 'LAUrban/Billings_0280.JPG', 'LAUrban/Billings_0286.JPG', 'LAUrban/Billings_0290.JPG', 'LAUrban/Billings_0317.JPG', 'LAUrban/Bozeman_0005.JPG', 'LAUrban/Bozeman_0008.JPG', 'LAUrban/Bozeman_0012.JPG', 'LAUrban/Bozeman_0038.JPG', 'LAUrban/Bozeman_0044.JPG', 'LAUrban/CO_Blvrd_40.jpg', 'LAUrban/Downtown_0299.jpg', 'LAUrban/Downtown_0348.jpg', 'LAUrban/Downtown_0367.jpg', 'LAUrban/Downtown_0371.jpg', 'LAUrban/Downtown_0381.jpg', 'LAUrban/Downtown_0390.jpg', 'LAUrban/DTC_1.jpg', 'LAUrban/DTC_19.jpg', 'LAUrban/DTC_21.jpg', 'LAUrban/DTC_41.jpg', 'LAUrban/DTC_50.jpg', 'LAUrban/DU_17.jpg', 'LAUrban/DU_18.jpg', 'LAUrban/DU_23.jpg', 'LAUrban/DU_35.jpg', 'LAUrban/Golden_18.jpg', 'LAUrban/Golden_24.jpg', 'LAUrban/Golden_30.jpg', 'LAUrban/Golden_33.jpg', 'LAUrban/Golden_48.jpg', 'LAUrban/Golden_49.jpg', 'LAUrban/Golden_55.jpg', 'LAUrban/Golden_59.jpg', 'LAUrban/Golden_65.jpg', 'LAUrban/Urban_Berman_06.jpg', 'LAUrban/Urban_Berman_25.jpg', 'LAUrban/Urban_Berman_27.jpg', 'LAUrban/Urban_Berman_35.jpg', 'LAUrban/Urban_Berman_37.jpg', 'LAUrban/Urban_Berman_40.jpg', 'LAUrban/Vacation_5018.JPG', 'LAUrban/Vacation_5135.JPG', 'LAUrban/Vacation_8420.JPG', 'LAUrban/Vacation_8448.JPG', 'LAUrban/Vacation_8493.JPG', 'LAUrban/Vacation_8585.JPG', 'LAUrban/Vacation_8664.JPG', 'HANature/Berman_Nature__17.jpg', 'HANature/Berman_Nature__19.jpg', 'HANature/Berman_Nature__32.jpg', 'HANature/Berman_Nature__34.jpg', 'HANature/Berman_Nature__36.jpg', 'HANature/Berman_Nature__41.jpg', 'HANature/Berman_Nature__43.jpg', 'HANature/Berman_Nature__45.jpg', 'HANature/Berman_Nature__46.jpg', 'HANature/Berman_Nature__49.jpg', 'HANature/BotanicGardens_0043.JPG', 'HANature/BotanicGardens_0044.JPG', 'HANature/BotanicGardens_0059.JPG', 'HANature/BotanicGardens_0893.JPG', 'HANature/Castlewood_Canyon_6.jpg', 'HANature/Hyalite_0084.JPG', 'HANature/Hyalite_0141.JPG', 'HANature/Hyalite_0159.JPG', 'HANature/Hyalite_0218.JPG', 'HANature/Hyalite_0222.JPG', 'HANature/Hyalite_0229.JPG', 'HANature/Hyalite_0230.JPG', 'HANature/Hyalite_0231.JPG', 'HANature/Hyalite_0236.JPG', 'HANature/Hyalite_0237.JPG', 'HANature/Hyalite_0238.JPG', 'HANature/Hyalite_0239.JPG', 'HANature/Practice.jpg', 'HANature/Ranch_1.jpeg', 'HANature/Ranch_4.jpeg', 'HANature/Ranch_5.jpeg', 'HANature/Tarryall_0607.JPG', 'HANature/Tarryall_0613.JPG', 'HANature/Tarryall_0618.JPG', 'HANature/Tarryall_0620.JPG', 'HANature/Vacation_0924.JPG', 'HANature/Vacation_1443.JPG', 'HANature/Vacation_1449.JPG', 'HANature/Vacation_2692.JPG', 'HANature/Vacation_2695.JPG', 'HANature/Vacation_5469.JPG', 'HANature/Vacation_5473.JPG', 'HANature/Vacation_5512.JPG', 'HANature/Vacation_5514.JPG', 'HANature/Vacation_5553.JPG', 'HANature/Vacation_5554.JPG', 'HANature/Vacation_5558.JPG', 'HANature/Vacation_5647.JPG', 'HANature/Vacation_5661.JPG', 'HANature/Vacation_5663.JPG', 'HANature/Vacation_5665.JPG', 'HANature/Vacation_5672.JPG', 'HANature/Vacation_5756.JPG', 'HANature/Vacation_6301.JPG', 'HANature/Vacation_6668.JPG', 'HANature/Vacation_7001.JPG', 'HANature/Vacation_7596.JPG', 'HANature/Vacation_7629.JPG', 'HANature/Vacation_7657.JPG', 'HANature/Vacation_7683.JPG']
  Save log file = False
  Screen = 1
  Show mouse = True
  Units = pix
  Window size (pixels) = [1440, 900]
  color = $[1,1,1]
  expName = SNAC
  frameRateMsg = Loading, please wait...
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine Image
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    ImageComponent image
      image [set every repeat] = $imagename
      saveStartStop = False
      size = (1.8, 1.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $duration
      units = norm
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  Routine math_answer
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    TextComponent answers
      color = black
      letterHeight = 0.08
      pos = (0, 0.18)
      startVal [time (s)] = 0.0
      text = Please answer the addition problem
      units = norm
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    TextComponent answer_a
      color = black
      letterHeight = 0.2
      pos = (-0.2, -0.075)
      startVal [time (s)] = 0.0
      text [set every repeat] = $a
      units = norm
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    TextComponent answer_b
      color = black
      letterHeight = 0.2
      pos = (0.2, -0.075)
      startVal [time (s)] = 0.0
      text [set every repeat] = $b
      units = norm
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    MouseComponent answer_end
      clickable = answer_a, answer_b
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine vastness
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    TextComponent vast_Q_2
      color = black
      letterHeight = 0.1
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = How vast does this environment feel? (Even though it's a photo, rate the sense of expansive space the image conveys.)
      units = norm
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    SliderComponent slider_2
      borderColor = DarkGray
      forceEndRoutine = False
      granularity = 0
      initVal = 50
      labels = 0, 100
      letterHeight = 0.035
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styleTweaks = ('triangleMarker',)
      styles = scrollbar
      ticks = (0, 100)
      units = height
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    MouseComponent mouse_6
      clickable = Submit_score_2, Submit_score_button_2
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    TextComponent define_vast_2
      color = gray
      letterHeight = 0.05
      pos = (0, 0.75)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Vastness: a perceptual phenomenon that occurs when a space seems to extend to very far distances, seemingly without limit.
      units = norm
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    PolygonComponent Submit_score_button_2
      fillColor = #b9b9b9
      lineColor = black
      pos = (0, -0.3)
      shape = rectangle
      size = (0.4, 0.1)
      startVal [time (s)] = 0.0
      units = norm
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    TextComponent Submit_score_2
      color = black
      letterHeight = 0.08
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Submit Score
      units = norm
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  Routine time_start
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    TextComponent start_time
      color = black
      letterHeight = 0.08
      pos = (0, .18)
      startVal [time (s)] = 0.0
      text = Click the hourglass to start the timer
      units = norm
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    PolygonComponent hg_start_bottom
      fillColor = gray
      lineColor = gray
      pos = (0, -0.07)
      shape = triangle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent hg_start_top
      fillColor = gray
      lineColor = gray
      ori = 180
      pos = (0, -0.05)
      shape = triangle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      units = height
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    MouseComponent start_time_mouse
      clickable = hg_start_top, hg_start_bottom
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    TextComponent time_instructions
      color = gray
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Please click the hourglass displayed on the screen once to start the timer and then a second time to stop the timer, replicating how long the image was displayed for.
      units = norm
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  Routine time_end
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    TextComponent end_time
      color = black
      letterHeight = 0.08
      pos = (0, .18)
      startVal [time (s)] = 0.0
      text = Click the hourglass to stop the timer
      units = norm
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    PolygonComponent hg_end_bottom
      fillColor = black
      lineColor = black
      pos = (0, -0.07)
      shape = triangle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent hg_end_top
      fillColor = black
      lineColor = black
      ori = 180
      pos = (0, -0.05)
      shape = triangle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      units = height
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    MouseComponent end_time_mouse
      clickable = hg_end_top, hg_end_bottom
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine set_up
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    CodeComponent code
      Code Type = Py
      disabled = True
      Before Experiment:
        import pandas as pd
        import random
        from pathlib import Path

        import sys
        import gc

        # Force garbage collection
        gc.collect()

        # Get participant ID from experiment info
        #pptID = expInfo['participant']

        # Define file paths
        full_file = 'image.durations.full.xlsx'
        equations_file = 'equations.xlsx'
        participant_file = 'ppt.image.durations.xlsx'

        # Flag to track if we need to restart selection
        selection_successful = False
        max_attempts = 5  # Prevent infinite loops
        attempt_count = 0

        while not selection_successful and attempt_count < max_attempts:
            attempt_count += 1
            print(f"\n--- Selection attempt {attempt_count} ---")

            # 1. LOAD THE FILES (fresh each attempt)
            df_full = pd.read_excel(full_file)
            df_equations = pd.read_excel(equations_file)

            # 2. CREATE EMPTY DATAFRAME FOR PARTICIPANT
            df_participant = pd.DataFrame()

            # 3. DEFINE ALL COMBINATIONS TO SELECT
            combinations = [
                ("high arousal nature", 2.3), ("high arousal nature", 3.7),
                ("high arousal nature", 5.1), ("high arousal nature", 6.5),
                ("low arousal nature", 2.3), ("low arousal nature", 3.7),
                ("low arousal nature", 5.1), ("low arousal nature", 6.5),
                ("high arousal urban", 2.3), ("high arousal urban", 3.7),
                ("high arousal urban", 5.1), ("high arousal urban", 6.5),
                ("low arousal urban", 2.3), ("low arousal urban", 3.7),
                ("low arousal urban", 5.1), ("low arousal urban", 6.5)
            ]

            # Shuffle combinations to distribute usage
            random.shuffle(combinations)

            # Track selected image names ONLY (to prevent any repeat of the same image)
            selected_image_names = set()

            # Flag to track if this attempt fails
            attempt_failed = False

            # 4. SELECT 5 ROWS FOR EACH COMBINATION
            for img_type, duration in combinations:
                available = df_full[
                    (df_full['used'] == 'no') &
                    (df_full['type'] == img_type) &
                    (df_full['duration'] == duration)
                ]

                # Filter out any images that have already been selected (at ANY duration)
                available = available[~available['image_name'].isin(selected_image_names)]

                if len(available) < 5:
                    print(f"  SHORTAGE: Only {len(available)} for {img_type}, duration {duration}. Resetting all 'used' to 'no'...")

                    # Reset ALL 'used' values to 'no' in the full file
                    df_full['used'] = 'no'
                    df_full.to_excel(full_file, index=False)

                    # Mark this attempt as failed and break out of the loop
                    attempt_failed = True
                    break

                selected = available.sample(n=5, random_state=None)
                df_participant = pd.concat([df_participant, selected], ignore_index=True)

                # Store ONLY the image names (not the durations)
                selected_image_names.update(selected['image_name'].tolist())
                print(f"  Selected 5 for {img_type}, {duration}")

            # If we didn't fail, selection was successful
            if not attempt_failed:
                selection_successful = True
                print(f"\nSelection successful after {attempt_count} attempt(s)!")
            else:
                print(f"Attempt {attempt_count} failed, trying again...")

        # Check if we exceeded max attempts
        if not selection_successful:
            raise Exception(f"Could not select images after {max_attempts} attempts. Check your image database.")

        # 5. RANDOMIZE THE ORDER OF PARTICIPANT ROWS
        df_participant = df_participant.sample(frac=1, random_state=None).reset_index(drop=True)

        # 6. RANDOMIZE EQUATIONS AND COLUMN BIND
        df_equations_shuffled = df_equations.sample(frac=1, random_state=None).reset_index(drop=True)
        df_equations_shuffled = df_equations_shuffled.head(len(df_participant)).reset_index(drop=True)

        for col in df_equations_shuffled.columns:
            df_participant[col] = df_equations_shuffled[col].values

        # 7. SAVE PARTICIPANT FILE
        df_participant.to_excel(participant_file, index=False)

        # 8. UPDATE FULL FILE - mark selected rows as 'yes'
        for _, row in df_participant.iterrows():
            mask = (df_full['image_name'] == row['image_name']) & (df_full['duration'] == row['duration'])
            df_full.loc[mask, 'used'] = 'yes'

        df_full.to_excel(full_file, index=False)

        print(f"\n{'='*50}")
        print(f"SUCCESS! Created {participant_file}")
  Routine end
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    TextComponent text_2
      color = black
      letterHeight = 0.08
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = Please remember this number, you will need to enter it on the next page:
      units = norm
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    TextComponent text_6
      color = black
      letterHeight = 0.2
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $expInfo['Please keep this number!']
      units = norm
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    CodeComponent Pipe into OSF
      Code Type = JS
      disabled = True
      End JS Experiment:
        // Disable downloading results to browser
        psychoJS._saveResults = 0;

        // Generate filename for results
        let filename = expInfo['Please keep this number!'] + '.csv';

        // Extract data object from experiment
        let dataObj = psychoJS._experiment._trialsData;

        // Define the columns to keep and their new names
        let columnMapping = {
            'Please keep this number!': 'ID',
            'group': 'group',
            'equation': 'equation',
            'answer': 'correct_answer',
            'answer_end.clicked_name': 'ppt_answer',
            'duration': 'act_time',
            'imagename': 'imagename',
            'end_time_mouse.time': 'est_time',
            'slider_2.response': 'vast_score'
        };

        // Get the list of original column names to keep
        let columnsToKeep = Object.keys(columnMapping);

        // Step 1: Collect ALL unique keys from every trial (to identify all possible columns)
        let allPossibleKeys = new Set();
        dataObj.forEach(trial => {
            Object.keys(trial).forEach(key => {
                allPossibleKeys.add(key);
            });
        });

        // Step 2: Create a function that extracts only the columns we want
        function extractAndRenameTrial(trial, columnsToKeep, columnMapping) {
            let extractedRow = {};
            columnsToKeep.forEach(originalKey => {
                let newKey = columnMapping[originalKey];
                let value = '';

                // Check if the trial has this key and it's not undefined/null
                if (trial.hasOwnProperty(originalKey) && trial[originalKey] !== undefined && trial[originalKey] !== null) {
                    value = trial[originalKey];
                    // Handle arrays/objects by converting to JSON string
                    if (typeof value === 'object') {
                        value = JSON.stringify(value);
                    }
                }
                extractedRow[newKey] = value;
            });
            return extractedRow;
        }

        // Step 3: Extract and rename data for all trials
        let filteredData = dataObj.map(trial => extractAndRenameTrial(trial, columnsToKeep, columnMapping));

        // Step 4: Convert filtered data to CSV
        let headers = Object.keys(columnMapping).map(key => columnMapping[key]); // Get renamed headers
        let data = [headers.join(',')]; // Header row with renamed columns

        filteredData.forEach(row => {
            let rowValues = headers.map(header => {
                let value = row[header];
                // Handle values that might contain commas or quotes
                if (typeof value === 'string' && (value.includes(',') || value.includes('"'))) {
                    return '"' + value.replace(/"/g, '""') + '"';
                }
                return value;
            });
            data.push(rowValues.join(','));
        });

        let finalCSV = data.join('\n');

        // Send data to OSF via DataPipe
        console.log('Saving data with filtered columns...');
        console.log('Columns:', headers.join(', '));
        console.log('Total rows:', filteredData.length);

        fetch('https://pipe.jspsych.org/api/data', {
            method: 'POST',
            headers: {
                'Content-Type': 'application/json',
                Accept: '*/*',
            },
            body: JSON.stringify({
                experimentID: 'Jbc9toAnfsBP', // * UPDATE WITH YOUR DATAPIKE EXPERIMENT ID *
                filename: filename,
                data: finalCSV,
            }),
        }).then(response => response.json()).then(data => {
            // Log response and force experiment end
            console.log(data);
            quitPsychoJS();
        }).catch(error => {
            console.error('Error saving data:', error);
            quitPsychoJS();
        });
    TextComponent text_7
      color = black
      letterHeight = 0.08
      pos = (0, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press 'esc' twice whem you are done viewing the number
      units = norm
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    CodeComponent Save_Data
      Code Type = JS
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      End JS Experiment:
        // Disable default download
        psychoJS._saveResults = 0;

        // Flag to prevent multiple downloads
        if (typeof window._dataDownloaded === 'undefined') {
            window._dataDownloaded = false;
        }

        if (!window._dataDownloaded) {
            window._dataDownloaded = true;

            // Generate filename for results
            let filename = expInfo['Please keep this number!'] + '.csv';

            // Extract data object from experiment
            let dataObj = psychoJS._experiment._trialsData;

            // Define the columns to keep and their new names
            let columnMapping = {
                'Please keep this number!': 'ID',
                'group': 'group',
                'equation': 'equation',
                'answer': 'correct_answer',
                'answer_end.clicked_name': 'ppt_answer',
                'duration': 'act_time',
                'imagename': 'imagename',
                'end_time_mouse.time': 'est_time',
                'slider_2.response': 'vast_score'
            };

            // Get the list of original column names to keep
            let columnsToKeep = Object.keys(columnMapping);

            // Collect ALL unique keys from every trial
            let allPossibleKeys = new Set();
            dataObj.forEach(trial => {
                Object.keys(trial).forEach(key => {
                    allPossibleKeys.add(key);
                });
            });

            // Extract only the columns we want
            function extractAndRenameTrial(trial, columnsToKeep, columnMapping) {
                let extractedRow = {};
                columnsToKeep.forEach(originalKey => {
                    let newKey = columnMapping[originalKey];
                    let value = '';

                    if (trial.hasOwnProperty(originalKey) && trial[originalKey] !== undefined && trial[originalKey] !== null) {
                        value = trial[originalKey];
                        if (typeof value === 'object') {
                            value = JSON.stringify(value);
                        }
                    }
                    extractedRow[newKey] = value;
                });
                return extractedRow;
            }

            // Extract and rename data for all trials
            let filteredData = dataObj.map(trial => extractAndRenameTrial(trial, columnsToKeep, columnMapping));

            // Convert filtered data to CSV
            let headers = Object.keys(columnMapping).map(key => columnMapping[key]);
            let data = [headers.join(',')];

            filteredData.forEach(row => {
                let rowValues = headers.map(header => {
                    let value = row[header];
                    if (typeof value === 'string' && (value.includes(',') || value.includes('"'))) {
                        return '"' + value.replace(/"/g, '""') + '"';
                    }
                    return value;
                });
                data.push(rowValues.join(','));
            });

            let finalCSV = data.join('\n');

            // Download function
            function downloadCSV(csvContent, fileName) {
                const blob = new Blob([csvContent], { type: 'text/csv;charset=utf-8;' });
                const link = document.createElement('a');
                const url = URL.createObjectURL(blob);
                link.href = url;
                link.download = fileName;
                document.body.appendChild(link);
                link.click();
                document.body.removeChild(link);
                URL.revokeObjectURL(url);
            }

            // Download the file
            downloadCSV(finalCSV, filename);

            // Log for debugging
            console.log('CSV downloaded:', filename);
            console.log('Columns:', headers.join(', '));
            console.log('Total rows:', filteredData.length);

            // End the experiment
            quitPsychoJS();
        }
  Routine equations
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    TextComponent math_equation
      color = black
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text [set every repeat] = $equation
      units = norm
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  Routine p_math_answer
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    TextComponent text_10
      color = black
      letterHeight = 0.08
      pos = (0, .18)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Please answer the addition problem.
      units = norm
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    TextComponent p_a
      color = black
      letterHeight = 0.2
      pos = (-.2, -0.075)
      startVal [time (s)] = 0.0
      text = 48
      units = norm
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    TextComponent p_b
      color = black
      letterHeight = 0.2
      pos = (.2, -.075)
      startVal [time (s)] = 0.0
      text = 43
      units = norm
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    MouseComponent mouse
      clickable = p_a, p_b
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine p_equation
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    TextComponent text_9
      color = black
      letterHeight = 0.2
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = 16 + 27
      units = norm
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  Routine p_image
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    ImageComponent image_6
      image = Beach 2.jpg
      saveStartStop = False
      size = (1.8, 1.8)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      units = norm
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  Routine p_time_start
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    TextComponent text_11
      color = black
      letterHeight = 0.1
      pos = (0, .18)
      startVal [time (s)] = 0.0
      text = Click the hourglass to start the timer
      units = norm
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    PolygonComponent polygon
      fillColor = gray
      lineColor = gray
      pos = (0, -0.07)
      shape = triangle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent polygon_2
      fillColor = gray
      lineColor = gray
      ori = 180
      pos = (0, -0.05)
      shape = triangle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      units = height
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    MouseComponent mouse_2
      clickable = polygon, polygon_2
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    TextComponent time_instructionp
      color = gray
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Please click the hourglass displayed on the screen once to start the timer and then a second time to stop the timer, replicating how long the image was displayed for.
      units = norm
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  Routine p_time_end
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    TextComponent text_12
      color = black
      letterHeight = 0.1
      pos = (0, 0.18)
      startVal [time (s)] = 0.0
      text = Click the hourglass to stop the timer
      units = norm
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    PolygonComponent polygon_3
      fillColor = black
      pos = (0, -0.07)
      shape = triangle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent polygon_4
      fillColor = black
      ori = 180
      pos = (0, -0.05)
      shape = triangle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      units = height
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    MouseComponent mouse_3
      clickable = polygon_3, polygon_4
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine p_vastness
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    TextComponent vast_Q
      color = black
      letterHeight = 0.1
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = How vast does this environment feel? (Even though it's a photo, rate the sense of expansive space the image conveys.)
      units = norm
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    SliderComponent slider
      borderColor = DarkGray
      forceEndRoutine = False
      granularity = 0
      initVal = 50
      labels = 0, 100
      letterHeight = 0.035
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styleTweaks = ('triangleMarker',)
      styles = scrollbar
      ticks = (0, 100)
      units = height
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    MouseComponent mouse_4
      clickable = Submit_score, Submit_score_button
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    TextComponent define_vast
      color = gray
      letterHeight = 0.05
      pos = (0, 0.75)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Vastness: a perceptual phenomenon that occurs when a space seems to extend to very far distances, seemingly without limit.
      units = norm
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    PolygonComponent Submit_score_button
      fillColor = #b9b9b9
      lineColor = black
      pos = (0, -0.3)
      shape = rectangle
      size = (0.4, 0.1)
      startVal [time (s)] = 0.0
      units = norm
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    TextComponent Submit_score
      color = black
      letterHeight = 0.08
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Submit Score
      units = norm
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  Routine start_exp
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    CodeComponent code_7
      Code Type = Py
      End Routine:
        if mouse_5.isPressedIn(yes_option):
            print("Another practice")
            # Force restart of the practice routine
            start_p.finished = False
            start_p.thisN = 0  # Reset to first trial
        elif mouse_5.isPressedIn(no_option):
            print("Continue to main")
            # Let the flow continue naturally
    TextComponent text_16
      color = black
      letterHeight = 0.055
      pos = (0, 0.02)
      startVal [time (s)] = 0.0
      text = Would you like another practice trial?
      units = height
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    TextComponent yes_option
      color = darkgreen
      letterHeight = 0.055
      pos = (-0.2, -0.1)
      startVal [time (s)] = 0.0
      text = YES
      units = norm
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    TextComponent no_option
      color = darkred
      letterHeight = 0.055
      pos = (0.2, -0.1)
      startVal [time (s)] = 0.0
      text = NO
      units = norm
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    MouseComponent mouse_5
      clickable = yes_option, no_option
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine start_p
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    TextComponent text_15
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Click the spacebar to start the practice trial.
      units = norm
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = JS
      Begin JS Experiment:
        var givenLetter = expInfo['What letter were you given?'];
        expInfo['conditionFile'] = givenLetter + '.csv';
  Routine start_e
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    TextComponent text
      color = black
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      text = Press the spacebar to start the next trial.
      units = norm
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine catch
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    TextComponent text_3
      color = black
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      units = norm
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    KeyboardComponent key_resp_2
      allowedKeys = 'c','a','g','o','t'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    CodeComponent code_2
      Code Type = JS
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      Begin JS Routine:
        if ((trials.thisN + 1) % 10 !== 0) {
            continueRoutine = false;
        }

        // Randomly choose the target key for this trial (no import needed)
        var target_key = ['c', 'a', 'g', 'o', 't'][Math.floor(Math.random() * 5)];

        // Set the text to prompt the participant
        text_3.setText("Press '" + target_key + "' to continue with the study");
Flow
  Routine start_p
  Routine p_equation
  Routine p_image
  Routine p_math_answer
  Routine p_time_start
  Routine p_time_end
  Routine p_vastness
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = $expInfo['conditionFile']
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('imagename', 'HANature/Berman_Nature__32.jpg'), ('duration', 1.7), ('type', 'HANature'), ('used', 'no'), ('group', 'o'), ('equation', '18 + 22'), ('a', 44), ('b', 40), ('answer', 'b')]),
      OrderedDict([('imagename', 'HANature/Berman_Nature__41.jpg'), ('duration', 1.7), ('type', 'HANature'), ('used', 'no'), ('group', 'o'), ('equation', '21 + 25'), ('a', 46), ('b', 40), ('answer', 'a')]),
      OrderedDict([('imagename', 'HANature/Berman_Nature__45.jpg'), ('duration', 1.7), ('type', 'HANature'), ('used', 'no'), ('group', 'o'), ('equation', '17 + 25'), ('a', 42), ('b', 39), ('answer', 'a')]),
      OrderedDict([('imagename', 'HANature/BotanicGardens_0044.JPG'), ('duration', 1.7), ('type', 'HANature'), ('used', 'no'), ('group', 'o'), ('equation', '8 + 22'), ('a', 30), ('b', 28), ('answer', 'a')]),
      OrderedDict([('imagename', 'HANature/BotanicGardens_0059.JPG'), ('duration', 5.3), ('type', 'HANature'), ('used', 'no'), ('group', 'o'), ('equation', '28 + 12'), ('a', 40), ('b', 36), ('answer', 'a')]),
      OrderedDict([('imagename', 'HANature/Hyalite_0084.JPG'), ('duration', 5.3), ('type', 'HANature'), ('used', 'no'), ('group', 'o'), ('equation', '29 + 10'), ('a', 39), ('b', 41), ('answer', 'a')]),
      OrderedDict([('imagename', 'HANature/Hyalite_0218.JPG'), ('duration', 5.3), ('type', 'HANature'), ('used', 'yes'), ('group', 'o'), ('equation', '22 + 7'), ('a', 29), ('b', 31), ('answer', 'a')])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
    Routine start_e
    Routine equations
    Routine Image
    Routine math_answer
    Routine time_start
    Routine time_end
    Routine vastness
    Routine catch
  LoopTerminator trials
  Routine end
